PsychoPy2experiment version="1.90.2"
Settings
  expName = OD
  Show info dlg = False
  Experiment info = {'participant': '', 'session': '001'}
  Use version = latest
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  color = $[0,0,0]
  colorSpace = dkl
  Units = deg
  Save log file = False
  Save wide csv file = False
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        from tkinter import filedialog
        from tkinter import *
        from psychopy import core, event
        import numpy
        import random, sys, os
        import shutil
        from PyMata.pymata import PyMata
        arduino = PyMata("COM4", verbose=True)
        arduino.set_pin_mode(3,arduino.OUTPUT, arduino.DIGITAL) #Left Shutter on arduino pin  3
        arduino.set_pin_mode(4,arduino.OUTPUT, arduino.DIGITAL) #Right Shutter on arduino pin 4

        ISI=8; ##Interstimulus interval

        root= Tk() ## File dialog window instantiation
        num_conditions=9 ##This is to create the folders for each conditions
        conditions_list=numpy.ones(8,dtype=int) ##Array that keeps track of how many times each condition was replicated
        trial_number=0 ##Initialize trial number
        Phase=0          ##Initialize the phase of the moving grating

        win.winHandle.set_visible(False)   ##Set the grating to be invisible so that the save folder directory is visible

        win.mouseVisible = True
        root.directory=filedialog.askdirectory()  ##Gui for the save folder

        win.winHandle.set_visible(True)           ##Make the grating visible again




        for i in range(num_conditions):              ##Make the directories for each condition in the root directory
         os.mkdir(root.directory+'/condition'+str(i))


        ##root.config(cursor='none')
        ##root.update_idletasks()
      Begin Routine:
        timer=core.Clock() ##Shutter timer



        ##This starts at 1 intertrial interval before the visual stimulus comes on. Either introduce a delay into the camera program or start this in the next section of the code (Each Frame)
        os.system("C:/Users/Nick/Desktop/pythonscripts/CameraDataDirectory/camfile.bat") ##Emulate camera file generation with a batch file


        os.mkdir(root.directory+'/condition'+str(Condition_number)+'/trial'+str(conditions_list[Condition_number-1])) ##Create a subfolder for the current condition replication number
        win.winHandle.activate()
        win.mouseVisible = False
        directionchoice=random.uniform(0,1)   ##Pick a direction for the grating motion
        if(directionchoice>0.5):
         direction=1
        elif(directionchoice<0.5):
         direction=-1
      Each Frame:
        win.setMouseVisible(False)
        Phase=Phase+1/60   ##move the grating at 1 cps
        if Phase>1:
         Phase=0
        if (timer.getTime()>ISI): ##Shutter turns on after the ISI
         if (Shutter==1):
          arduino.digital_write(3,1)
         elif(Shutter==2):
          arduino.digital_write(4,1)
      End Routine:
        arduino.digital_write(3,0)
        arduino.digital_write(4,0)
        shutil.move("C:/Users/Nick/Desktop/pythonscripts/CameraDataDirectory/test_data.txt",root.directory+"/condition"+str(Condition_number)+"/trial"+str(conditions_list[Condition_number-1])+"/"+"test_data.txt") ##move files from the camera to the root directory

        conditions_list[(Condition_number-1)]+=1
    GratingComponent grating
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
      units = deg
      color [set every repeat] = $Color
      colorSpace = dkl
      size = (55, 55)
      ori [set every repeat] = $Orientation
      tex = sqr
      mask = none
      sf = 1
      phase [set every frame] = $Phase*direction
      texture resolution = 512
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Flow
  LoopInitiator trials loopType="TrialHandler"
    nReps = 20
    conditionsFile = OD.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('Orientation', 45), ('Color', [-1, -1, -1]), ('Shutter', 'L')]),
      OrderedDict([('Orientation', 135), ('Color', [-1, -1, -1]), ('Shutter', 'R')]),
      OrderedDict([('Orientation', 45), ('Color', [-1, -1, -1]), ('Shutter', 'L')]),
      OrderedDict([('Orientation', 135), ('Color', [-1, -1, -1]), ('Shutter', 'R')])]
    Routine trial
  LoopTerminator trials
